PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ANT
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Routines
  Routine trial
    ImageComponent cues
      image [set every repeat] = $cue
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .1
      units = height
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    ImageComponent target
      image [set every repeat] = $tar
      ori [set every repeat] = $targOrientation
      size = (0.25, 0.25)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.7
      units = height
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.7
      store = first key
      storeCorrect = True
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    ImageComponent fixationshort
      image = stim/fix.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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  Routine feedback
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = JS
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      Begin JS Routine:
        var msg = '';

        if (resp.corr){
            msg="Correct! RT=" + resp.rt.toFixed(3);
        } else {
            msg = "Incorrect!";
        }

        text.setText(msg);
  Routine PracInstruc
    TextComponent pracText1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to this experiment.

        In this task, you will be presented with a central arrow surrounded by arrows or blocks. The central arrow will point left or right.

        Sometimes the flanking arrows will be pointing in the same direction as the central arrow, and sometimes the flanking arrows will point in the oppoiste direction to the central arrow.

        eg. >>>>> or >><>>

        Your task is to respond to the direction of the central arrow.

        If the central arrow points to the right, press the right arrow key and if the arrow points to the left, press the left arrow key.

        Press the space bar to continue.
    KeyboardComponent pracResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MainInstruc
    TextComponent mainInst
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        That is the end of the practice trials.

        The main trials will now begin. There will be 3 blocks of trials, with a rest period between each one.

        The main trials involve the same instructions as before, however, you will not receive feedback on your responses.

        Press the spacebar to continue.
    KeyboardComponent instResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracInstruct2
    TextComponent practInst2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this task, you must respond to the direction of the centre arrow using the arrow keys.

        First, a fixation cross will appear in the centre of the screen. The fixation is sometimes followed by blocks on the screen, which may or may not
        cue the location of the target stimulus. If the blocks appear after the fixation, it means that the target will appear shortly.

        If the blocks appears either above OR below the fixation cross, the target will shortly appear in that cued location.

        First there will be a practice trial, where you will recieve feedback and reaction times for each correct response.

        Place your index fingers on the left and right keys ready to start, and press the spacebar to proceed.
    KeyboardComponent practResp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent endText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        That is the end of the main trial.

        Thank you for taking part in this experiment.

        Press any key to exit.
    KeyboardComponent endKey
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Rest
    TextComponent rest
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed a block of main trials.

        Have a short rest as required, and press the space bar to continue to the next block of trials when you are ready.
    KeyboardComponent restResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        fixDuration  = .4
      Begin Routine:
        durations = np.arange(.4, .6, .05)  # Create durations
        shuffle(durations)  # Randomize durations
        fixDuration  = durations[0] # Take one of the randomized durations
      End Routine:
        thisExp.addData("fixFuration", fixDuration)
    ImageComponent image
      image = stim/fix.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDuration
      units = height
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Flow
  Routine PracInstruc
  Routine PracInstruct2
  LoopInitiator pracLoop loopType="TrialHandler"
    Selected rows = 0:24
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cue', 'stim/upper.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'left'), ('targOrientation', 0)]),
      OrderedDict([('cue', 'stim/both.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'left'), ('targOrientation', 0)]),
      OrderedDict([('cue', 'stim/centre.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'left'), ('targOrientation', 0)]),
      OrderedDict([('cue', 'None'), ('tar', 'stim/congLeft.png'), ('corrAns', 'left'), ('targOrientation', 0)]),
      OrderedDict([('cue', 'stim/lower.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'right'), ('targOrientation', 180)]),
      OrderedDict([('cue', 'stim/both.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'right'), ('targOrientation', 180)]),
      OrderedDict([('cue', 'stim/centre.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'right'), ('targOrientation', 180)]),
      OrderedDict([('cue', 'None'), ('tar', 'stim/congLeft.png'), ('corrAns', 'right'), ('targOrientation', 180)]),
      OrderedDict([('cue', 'stim/upper.png'), ('tar', 'stim/congRight.png'), ('corrAns', 'right'), ('targOrientation', 0)]),
      OrderedDict([('cue', 'stim/both.png'), ('tar', 'stim/congRight.png'), ('corrAns', 'right'), ('targOrientation', 0)]),
      OrderedDict([('cue', 'stim/centre.png'), ('tar', 'stim/congRight.png'), ('corrAns', 'right'), ('targOrientation', 0)]),
      OrderedDict([('cue', 'None'), ('tar', 'stim/congRight.png'), ('corrAns', 'right'), ('targOrientation', 0)]),
      OrderedDict([('cue', 'stim/lower.png'), ('tar', 'stim/congRight.png'), ('corrAns', 'left'), ('targOrientation', 180)])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
    Routine fixation
    Routine trial
    Routine feedback
  LoopTerminator pracLoop
  Routine MainInstruc
  LoopInitiator blockLoop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator mainLoop loopType="TrialHandler"
      conditionsFile = cond.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('cue', 'stim/upper.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'left'), ('targOrientation', 0)]),
        OrderedDict([('cue', 'stim/both.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'left'), ('targOrientation', 0)]),
        OrderedDict([('cue', 'stim/centre.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'left'), ('targOrientation', 0)]),
        OrderedDict([('cue', 'stim/fix.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'left'), ('targOrientation', 0)]),
        OrderedDict([('cue', 'stim/lower.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'right'), ('targOrientation', 180)]),
        OrderedDict([('cue', 'stim/both.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'right'), ('targOrientation', 180)]),
        OrderedDict([('cue', 'stim/centre.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'right'), ('targOrientation', 180)]),
        OrderedDict([('cue', 'stim/fix.png'), ('tar', 'stim/congLeft.png'), ('corrAns', 'right'), ('targOrientation', 180)]),
        OrderedDict([('cue', 'stim/upper.png'), ('tar', 'stim/congRight.png'), ('corrAns', 'right'), ('targOrientation', 0)]),
        OrderedDict([('cue', 'stim/both.png'), ('tar', 'stim/congRight.png'), ('corrAns', 'right'), ('targOrientation', 0)]),
        OrderedDict([('cue', 'stim/centre.png'), ('tar', 'stim/congRight.png'), ('corrAns', 'right'), ('targOrientation', 0)]),
        OrderedDict([('cue', 'stim/fix.png'), ('tar', 'stim/congRight.png'), ('corrAns', 'right'), ('targOrientation', 0)])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
      Routine fixation
      Routine trial
    LoopTerminator mainLoop
    Routine Rest
  LoopTerminator blockLoop
  Routine End
